PsychoPy2experiment version="2021.1.2"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Use version = 2021.1.2
  Window size (pixels) = [1280, 800]
  expName = VideoMask
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Routines
  Routine Intro
    CodeComponent code
      Code Type = Py
      Before Experiment:
        from psychopy import parallel
        block_num = 0


        #Scanner Wait = 2
        #Jitter Start = 5
        #Fixcross Start = 10
        #Primer Start = ID_Primer (120-140)
        #Mask Start = 20

        #Movie = ID_Target (150-160) (171 bei example)
        #Slider = 170
        #Response Start = 30
        #Keypress Korrekt = 40
        #KeyPress notcorrect= 45
        #Keypress sad = 50
        #Keypress neutral = 60
        #Keypress happy = 70
        #Keypress none = 80

        #Slider minus = 180
        #Slider plus = 190
        #Noslider Rating = 81
        #Exp Start = 90
        #Pause Start = 100
        #Ende = 110
      Begin Experiment:
        # Hide mouse
        win.mouseVisible = False

        #Response for slider
        slider_resp_response = keyboard.Keyboard()

        #Write Trigger File
        #triggerName ='VideoMask_EEG_Trigger'
        #filenametrigger = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], triggerName, expInfo['date'])
        #TriggerExp = data.ExperimentHandler(name=expName, version='04.02.20',
        #    extraInfo=expInfo, runtimeInfo=None,
        #    originPath='C:\\Users\\juhoffmann\\Desktop\\Paradigmen\\02_VideoMask\\VideoMask_120Hz_18_05_21.py',
        #    savePickle=False, saveWideText=True,
        #    dataFileName=filenametrigger)

        # Address EEG Trigger #
        p_port_EEG= parallel.ParallelPort(address='0x3FE8') # Scanner
        #p_port_EEG= parallel.ParallelPort(address='0x4FF7')   # EEG Room
        #p_port_EEG.setData(0)


        def sendTrigger(code):
            #print(code)
            #eegtriggertime = 0                                                          # Reset timing
            #eegtriggertime = core.getTime()                                             # Get Time of EEG Trigger

            win.callOnFlip(p_port_EEG.setData, int(code))
            core.wait(0.02)                                                       # Wait for 0.02 seconds
            p_port_EEG.setData(0)                                                      # Reset Trigger, set all pins to zero

            #TriggerExp.addData('EEG_trigger_time', eegtriggertime)                      # Save Time of EEG Trigger
            #TriggerExp.addData('EEG_trigger_number', code)                              # Save send EEG Trigger code
            #TriggerExp.nextEntry()


        #Wait for Scanner
        text_wait = visual.TextStim(win=win, name='text_wait',
            text='Warten auf Scanner...',
            font='Arial',
            pos=(0, 0), height=0.06, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);

        #Set first MR Trigger
        mr_trigger_number = []                                                          # array for MR scanner trigger
        mr_trigger_time = []                                                            # saved at the end of the script
        ScannerKeyboard = keyboard.Keyboard()                                           # keyboard for Scanner Trigger
        count_mr_trigger = 0                                                            # counts amount of MR scanner trigger, starts with zero
        start_trigger = ScannerKeyboard.getKeys(keyList=['a'], waitRelease = False)     # experiment starts with MR Scanner a

        # Draw waiting Screen until a is send
        while len(start_trigger) == 0:                                                  # if no trigger was send show:
            text_wait.draw()                                                            # Text "Warten auf Scanner"
            win.flip()
            start_trigger = ScannerKeyboard.getKeys(keyList=['a'], waitRelease = False) # show text_wait until one "a" was pressed
            if len(start_trigger) ==1:
                sendTrigger(2)
        # Get timing information and store trigger number
        onset = core.getTime()                                                          # get Onset time
        count_mr_trigger = count_mr_trigger + 1                                         # count MR Scanner trigger, start with 1
        mr_trigger_time.append(onset)                                                   # append onset time in mr_trigger_time list
        mr_trigger_number.append(count_mr_trigger)                                      # append trigger number in mr_trigger_number list
        count_mr_trigger = count_mr_trigger + 1                                         # counts trigger

        # Save time and number of MR Trigger
        thisExp.addData('MR_trigger_time', mr_trigger_time[0])                          # save trigger time of onset
        thisExp.addData('MR_trigger_number', mr_trigger_number[0])                      # save trigger number
    TextComponent text_intro
      durationEstim = 2
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      wrapWidth = 500
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      text:
        Willkommen!


        Bitte bewerten Sie die folgenden Videos
        nach diesen Emotionen:

        traurig       neutral         glücklich
    TextComponent text_probe
      durationEstim = 2
      letterHeight = 0.06
      startEstim = 2
      startVal [frame N] = 240
      stopVal [duration (frames)] = 240
      text = Es geht los mit einer Proberunde
      wrapWidth = 500
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  Routine ISI
    PolygonComponent polygon_ISI
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      shape = cross
      size = (0.5, 0.5)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $JitterTime
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  Routine start
    TextComponent text_start
      durationEstim = 1
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 120
      text = Jetzt geht es los...
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    CodeComponent EEG_start
      Code Type = Py
      Begin Routine:
        win.callOnFlip(sendTrigger, code=90)
  Routine pause
    CodeComponent code_Pause
      Code Type = Py
      Begin Routine:
        if block_num == 0:
           continueRoutine=False
      Each Frame:
        # MR Scanner trigger
        t_trigger = ScannerKeyboard.getKeys(keyList=['a'], waitRelease=False)
        if len(t_trigger):
            exptrigger = t_trigger[0]
            triggertime = 0
            triggertime = core.getTime()
            mr_trigger_time.append(triggertime)
            mr_trigger_number.append(count_mr_trigger)
            count_mr_trigger = count_mr_trigger + 1
      End Routine:
        block_num = block_num +1
    TextComponent text_pause
      durationEstim = 20
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 2400
      text = Kurze Pause, bevor es weiter geht
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  Routine end
    TextComponent text_ende
      durationEstim = 10
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1200
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      text:
        Das wars!
        Vielen Dank!
    CodeComponent EEG_Ende
      Code Type = Py
      Begin Routine:
        win.callOnFlip(sendTrigger, code=110)
  Routine code_block
    CodeComponent countBlocks
      Code Type = Py
      Begin Experiment:
        this_block_number = 0
      Begin Routine:
        this_block_number = this_block_number+1
  Routine introcode
    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        #Set Framerate for Timing
        hz120 = 1 #1

        #Set framerate for jitter                                                       # ms*framerate_factor=frames
        framerate = 60*hz120                                                            # set framerate to get exact jitter time and save it in csv data
        framerate_factor = framerate/1000                                               # 0.12 for 120 Hz

        #Set Timing for Routines in frames
        startTime = 60*hz120                                                           # 3.000 ms/1s       welcome time and time before starting the first block
        instruction = 300*hz120                                                         # 5.000 Ms          show instruction
        cross300 = 18*hz120                                                             # 300 ms            fixcross
        #primeTime1 = 1*hz120                                                           # 16,6 ms           primer strongly masked
        #primeTime2 = 9*hz120                                                           # 150 ms            primer weakly maked #120Hz = 141, also 17 frames
        scrambledTime = 4*hz120                                                         # 66ms ms             mask time #120Hz = 41, also 5 frames
        targettime = 18*hz120                                                           # 300 ms            target time
        responseTime = 90*hz120                                                         # 1.500 ms          time to response
        jittermintime = 60*hz120                                                        # 1.000 ms          minimal jitter time
        jittermaxtime = 120*hz120                                                       # 2.000 ms          maximal jitter time
        maxBreakTime = 1200*hz120                                                       # 20.000 ms/2s      maximal break between blocks
        ende = 600*hz120                                                                # 10.000 ms         Endbildschirm wird angezeigt

        # Conditions
        num_possible_example = 9                                                        # total number of example images in the study
        num_example = 5#5                                                                 # number of example items used
        num_items = 360                                                                 # total number of experiment images in the study
        num_study = 10#20                                                                 # number of study items used in one block#later 120 pro block
        block_ans = 3#3                                                                   # number of blocks, starting with block 1

        text_height = 0.06
        stimulis_size =(0.400, 0.484) #(0.529, 0.625)
  Routine trial_example
    CodeComponent code_ex
      Code Type = Py
      Begin Routine:
        #event.clearEvents('keyboard')
        #slider.markerPos = 5

        slider_resp_response.rt = []
        _slider_resp_response_allKeys = []
        slider_resp_response.keys = []

        slider.reset()
        event.clearEvents('slider_resp_response')
        slider.markerPos = 5
      Each Frame:
        #keys = event.getKeys()

        #if len(keys):
        #    if '7' in keys:
        #        slider.markerPos = slider.markerPos - 1
        #    elif '8' in keys:
        #        slider.markerPos = slider.markerPos  + 1

        keys = slider_resp_response.getKeys(keyList=['7', '9'], waitRelease=False)
        _slider_resp_response_allKeys.extend(keys) # put pressed keys in list
        if len(keys) == 1:
            if len(_slider_resp_response_allKeys):
                slider_resp_response.keys = _slider_resp_response_allKeys[0].name  # just the first key pressed
                slider_resp_response.rt = _slider_resp_response_allKeys[0].rt #rt of first press
            if '7' in keys:
                slider.markerPos = slider.markerPos - 1
                sendTrigger(responseratingminus)
            elif '9' in keys:
                slider.markerPos = slider.markerPos  + 1
                sendTrigger(responseratingplus)
      End Routine:
        # check responses
        if slider_resp_response.keys in ['', [], None]:  # No response was made
            slider_resp_response.keys = None
            sendTrigger(norating)

        study.addData("Rating", slider.markerPos) #Save final Slider Position
  Routine trial
    PolygonComponent polygon
      durationEstim = 0.3
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 36
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    CodeComponent EEG_Movie
      Code Type = Py
      Each Frame:
        if movie.status == NOT_STARTED and frameN >= 36:
            sendTrigger(ID_Target)
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $target
      startEstim = 0.3
      startVal [frame N] = 36
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    CodeComponent EEG_Primer
      Code Type = Py
      Each Frame:
        if primerImage.status == NOT_STARTED and frameN >= 168:
            sendTrigger(ID_Primer)
    ImageComponent primerImage
      durationEstim = 0.016
      image [set every repeat] = $prime
      size = (0.400, 0.484)
      startEstim = 1.4
      startVal [frame N] = 168
      stopVal [duration (frames)] = 2
      texture resolution = 512
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    TextComponent response
      durationEstim = 1.5
      letterHeight = 0.06
      startVal [condition] = $movie.status==FINISHED
      stopVal [duration (frames)] = 180
      text = traurig     neutral     glücklich
      wrapWidth = 500
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    KeyboardComponent key_resp
      allowedKeys = '7','8','9'
      correctAns = $corrAnsTar
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [condition] = $movie.status==FINISHED
      stopVal [duration (frames)] = 180
      store = first key
      storeCorrect = True
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    CodeComponent EEG_Keypress
      Code Type = Py
      Each Frame:
            if len(theseKeys) == 1:
                #sendTrigger(30)
                if key_resp.keys == "7":
                    sendTrigger(50)
                if key_resp.keys == "8":
                    sendTrigger(60)
                if key_resp.keys == "9":
                    sendTrigger(70)
      End Routine:
        # Trigger no Response
        if key_resp.keys == None:
            sendTrigger(80)
        if key_resp.corr == 1:
            sendTrigger(40)
        if key_resp.corr == 0:
            sendTrigger(45)
  Routine slider_response
    TextComponent slider_Text
      durationEstim = 3
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
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      text:
        Das Video machte mich eher....

        traurig     neutral      glücklich
    SliderComponent slider_ex
      durationEstim = 3
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_slider
      Code Type = Py
      Begin Routine:
        slider_ex.reset()
        event.clearEvents('slider_resp_response')
        slider_ex.markerPos = 5
      Each Frame:
        keys = slider_resp_response.getKeys(keyList=['7', '9'], waitRelease=False)
        _slider_resp_response_allKeys.extend(keys) # put pressed keys in list
        if len(keys) == 1:
            if len(_slider_resp_response_allKeys):
                slider_resp_response.keys = _slider_resp_response_allKeys[0].name  # just the first key pressed
                slider_resp_response.rt = _slider_resp_response_allKeys[0].rt #rt of first press
            if '7' in keys:
                slider_ex.markerPos = slider_ex.markerPos - 1
                sendTrigger(180)
            elif '9' in keys:
                slider_ex.markerPos = slider_ex.markerPos  + 1
                sendTrigger(190)
      End Routine:
        # check responses
        if slider_resp_response.keys in ['', [], None]:  # No response was made
            slider_resp_response.keys = None
            sendTrigger(81)

        example.addData("Rating", slider_ex.markerPos) #Save final Slider Position
    KeyboardComponent slider_resp_response
      allowedKeys = '7','9'
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
      store = all keys
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  Routine slider_study
    TextComponent text_slider
      durationEstim = 3
      letterHeight = 0.06
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
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      text:
        Das Video machte mich eher....

        traurig     neutral      glücklich
    SliderComponent slider_stud
      durationEstim = 3
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 360
      storeHistory = True
      styles = ['rating', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    CodeComponent code_slider_study
      Code Type = Py
      Begin Routine:
        slider_resp_study.rt = []
        _slider_resp_study_allKeys = []
        slider_resp_study.keys = []

        slider_stud.reset()
        event.clearEvents('slider_resp_response')
        slider_stud.markerPos = 5
      Each Frame:
        keys = slider_resp_study.getKeys(keyList=['7', '9'], waitRelease=False)
        _slider_resp_study_allKeys.extend(keys) # put pressed keys in list
        if len(keys) == 1:
            if len(_slider_resp_study_allKeys):
                slider_resp_study.keys = _slider_resp_study_allKeys[0].name  # just the first key pressed
                slider_resp_study.rt = _slider_resp_study_allKeys[0].rt #rt of first press
            if '7' in keys:
                slider_stud.markerPos = slider_stud.markerPos - 1
                sendTrigger(180)
            elif '9' in keys:
                slider_stud.markerPos = slider_stud.markerPos  + 1
                sendTrigger(190)
      End Routine:
        # check responses
        if slider_resp_study.keys in ['', [], None]:  # No response was made
            slider_resp_study.keys = None
            sendTrigger(81)

        study.addData("Rating", slider_stud.markerPos) #Save final Slider Position
    KeyboardComponent slider_resp_study
      allowedKeys = '7','9'
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [frame N] = 360
      store = all keys
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Flow
  Routine Intro
  LoopInitiator example loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = Datasheet_VideoMask_Example_rand.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('primePerson', 1111), ('primeGender', 'm'), ('prime', '1111_m_m_h_a.jpg'), ('primeEmotion', 'happy'), ('corrAnsPrime', 9), ('target', 'example_30.4ns.avi'), ('targetEmotion', 'neutral'), ('corrAnsTar', 7), ('Cond', 'incongruent'), ('EEG_ID_Primer', 120), ('EEG_ID_Target', 170), ('JitterTime', 132.03494993607018)]),
      OrderedDict([('primePerson', 1113), ('primeGender', 'f'), ('prime', '1113_y_f_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('target', 'example_30.3ns.avi'), ('targetEmotion', 'neutral'), ('corrAnsTar', 7), ('Cond', 'incongruent'), ('EEG_ID_Primer', 130), ('EEG_ID_Target', 170), ('JitterTime', 225.94725155344793)]),
      OrderedDict([('primePerson', 1112), ('primeGender', 'f'), ('prime', '1112_m_f_h_a.jpg'), ('primeEmotion', 'happy'), ('corrAnsPrime', 9), ('target', 'example_30.1ns.avi'), ('targetEmotion', 'neutral'), ('corrAnsTar', 7), ('Cond', 'incongruent'), ('EEG_ID_Primer', 120), ('EEG_ID_Target', 170), ('JitterTime', 196.75553092202244)]),
      OrderedDict([('primePerson', 1112), ('primeGender', 'f'), ('prime', '1112_m_f_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('target', 'example_30.2ns.avi'), ('targetEmotion', 'neutral'), ('corrAnsTar', 7), ('Cond', 'incongruent'), ('EEG_ID_Primer', 130), ('EEG_ID_Target', 170), ('JitterTime', 127.11441862224812)])]
    Routine ISI
    Routine trial
    Routine slider_response
  LoopTerminator example
  Routine start
  LoopInitiator study loopType="TrialHandler"
    Selected rows = 0:60
    conditionsFile = Datasheet_VideoMask_rand.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('primePerson', 3), ('primeGender', 'm'), ('prime', '033_o_m_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('target', 'sad_94.2ns.avi'), ('targetEmotion', 'sad'), ('corrAnsTar', 7), ('Cond', 'congruent'), ('EEG_ID_Primer', 130), ('EEG_ID_Target', 160), ('JitterTime', 170.6963229883999)]),
      OrderedDict([('primePerson', 0), ('primeGender', 'f'), ('prime', '030_o_f_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('target', 'sad_68.1ns.avi'), ('targetEmotion', 'sad'), ('corrAnsTar', 7), ('Cond', 'congruent'), ('EEG_ID_Primer', 130), ('EEG_ID_Target', 160), ('JitterTime', 190.11937728760964)]),
      OrderedDict([('primePerson', 8), ('primeGender', 'm'), ('prime', '008_y_m_h_a.jpg'), ('primeEmotion', 'happy'), ('corrAnsPrime', 9), ('target', 'happy_26.1ns.avi'), ('targetEmotion', 'happy'), ('corrAnsTar', 9), ('Cond', 'congruent'), ('EEG_ID_Primer', 140), ('EEG_ID_Target', 150), ('JitterTime', 125.73931327028457)]),
      OrderedDict([('primePerson', 0), ('primeGender', 'f'), ('prime', '030_o_f_s_a.jpg'), ('primeEmotion', 'sad'), ('corrAnsPrime', 7), ('target', 'happy_125.3.wmv'), ('targetEmotion', 'happy'), ('corrAnsTar', 9), ('Cond', 'incongruent'), ('EEG_ID_Primer', 130), ('EEG_ID_Target', 150), ('JitterTime', 178.05016714534608)])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
    Routine ISI
    Routine trial
    Routine slider_study
  LoopTerminator study
  Routine end
